PsychoPy2experiment version="2024.2.3"
Settings
  Completed URL = $"https://lamgd4lm4fp.typeform.com/to/nrFOZQYj?participant="+expInfo['participant']+"&session="+expInfo['session']+"&id="+expInfo['id']
  Experiment info = {'participant': '', 'session': '', 'task': 'gng'}
  Full-screen window = True
  Incomplete URL = incompleteURL
  Monitor = testMonitor
  Save excel file = True
  Save log file = False
  Screen = 1
  Units = height
  Window size (pixels) = [1470, 956]
  expName = Go_NoGo
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine wait
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    TextComponent fixation_cross
      letterHeight = 0.07
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2
      text = +
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  Routine practice
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    TextComponent instructions_1
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        For this experiment, please PRESS THE SPACEBAR when you see a GREEN symbol.

        DO NOT PRESS anything if you see a RED symbol.

        Be as quick as possible whilst trying to maintain accuracy.

        After a number of trials you will be given a short break.

        Before you start you will be allowed to practice a few trials. You will be given feedback to ensure you are performing the task correctly.

        Press the spacebar when you are ready to begin.
    KeyboardComponent spaceresponse_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PVQRR
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    CodeComponent skip_offline
      Code Type = Py
      Begin Routine:
        #skip this component offline
        continueRoutine = False
    TextComponent loading
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Loading...
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    CodeComponent iframe
      Code Type = JS
      Begin JS Routine:
        // This routine should not start straight away or the screen width and height
        // may be incorrect.

        expInfo['xRes'] = screen.width;
        expInfo['yRes'] = screen.height;
        console.log("screen xRes",expInfo['xRes']);
        console.log("screen yRes",expInfo['yRes']);

        //let src = ('demographics.html?xRes='+expInfo['xRes']+'&yRes='+expInfo['yRes']);
        let src = ('PVQRR-Required.html');

        params = {};  // Results added here after form is submitted
        continue_routine = true; // Routines can't be ended from within Begin Routine
        $(document).ready(function() {
            // Add custom contents from html file using an iframe:
            $('body').append('<div id="iframe-o" style="visibility: hidden; position: relative; display: table; margin: auto; overflow-x: hidden; overflow-y: scroll !important; -webkit-overflow-y-scrolling:touch !important;"><div id="iframe-m" style="display: table-cell; vertical-align: middle;"><div id="iframe-i" style="display: inline-block; width:100%; overflow-y: hidden; overflow-x: hidden;"><iframe id="iframe" src="'+src+'" frameborder="0" style="width: 100%; overflow-y: hidden; overflow-x: hidden; "></iframe></div></div></div>');
            $('#iframe').on('load',function(iframe){
                // Auto-adjust iframe size:
                $(this).contents().find('html').css({ 'display': 'table', 'width': '100%', 'overflow-x': 'hidden' });
                $('#iframe-o').height($(window).height()-20, true);
                $('#iframe-m').width($(this).contents().find('html').width()+100);
               $('#iframe-i').height ( Math.max ( $(this).contents().find('html').height()+20, $(window).height()-20 ), true );
                $(this).height($(this).contents().find('html').height());
                $('#iframe-o').css('visibility','visible');

                // If iframe contains a form, then capture its output:
                $(this).contents().find('form').on('submit',function(e){
                    e.preventDefault();
                    $.each($(this).serializeArray(),function(i, param){
                        params[param.name] = param.value;
                        psychoJS.experiment.addData(param.name, param.value);
                    });
                    console.log ( 'DEBUG:FRM', params );
                    // Remove iframe and continue to next routine when done:
                    $('#iframe-o').remove();
                    continue_routine = false;
                });
            });
        });
        //$('#iframe').attr( 'src', function(i,val){ return val;} );
      Each JS Frame:
        continueRoutine = continue_routine;
      End JS Routine:
        // expInfo variables appear on every line in the data file
        // after they are created.
        expInfo['1'] = psychoJS.experiment._currentTrialData['Q1'];
        expInfo['2'] = psychoJS.experiment._currentTrialData['Q2'];
        expInfo['3'] = psychoJS.experiment._currentTrialData['Q3'];
        expInfo['4'] = psychoJS.experiment._currentTrialData['Q4'];
        expInfo['5'] = psychoJS.experiment._currentTrialData['Q5'];
        expInfo['6'] = psychoJS.experiment._currentTrialData['Q6'];
        expInfo['7'] = psychoJS.experiment._currentTrialData['Q7'];
        expInfo['8'] = psychoJS.experiment._currentTrialData['Q8'];
        expInfo['9'] = psychoJS.experiment._currentTrialData['Q9'];
        expInfo['10'] = psychoJS.experiment._currentTrialData['Q10'];
        expInfo['11'] = psychoJS.experiment._currentTrialData['Q11'];
        expInfo['12'] = psychoJS.experiment._currentTrialData['Q12'];
        expInfo['13'] = psychoJS.experiment._currentTrialData['Q13'];
        expInfo['14'] = psychoJS.experiment._currentTrialData['Q14'];
        expInfo['15'] = psychoJS.experiment._currentTrialData['Q15'];
        expInfo['16'] = psychoJS.experiment._currentTrialData['Q16'];
        expInfo['17'] = psychoJS.experiment._currentTrialData['Q17'];
        expInfo['18'] = psychoJS.experiment._currentTrialData['Q18'];
        expInfo['19'] = psychoJS.experiment._currentTrialData['Q19'];
        expInfo['20'] = psychoJS.experiment._currentTrialData['Q20'];
        expInfo['21'] = psychoJS.experiment._currentTrialData['Q21'];
        expInfo['22'] = psychoJS.experiment._currentTrialData['Q22'];
        expInfo['23'] = psychoJS.experiment._currentTrialData['Q23'];
        expInfo['24'] = psychoJS.experiment._currentTrialData['Q24'];
        expInfo['25'] = psychoJS.experiment._currentTrialData['Q25'];
        expInfo['26'] = psychoJS.experiment._currentTrialData['Q26'];
        expInfo['27'] = psychoJS.experiment._currentTrialData['Q27'];
        expInfo['28'] = psychoJS.experiment._currentTrialData['Q28'];
        expInfo['29'] = psychoJS.experiment._currentTrialData['Q29'];
        expInfo['30'] = psychoJS.experiment._currentTrialData['Q30'];
        expInfo['31'] = psychoJS.experiment._currentTrialData['Q31'];
        expInfo['32'] = psychoJS.experiment._currentTrialData['Q32'];
        expInfo['33'] = psychoJS.experiment._currentTrialData['Q33'];
        expInfo['34'] = psychoJS.experiment._currentTrialData['Q34'];
        expInfo['35'] = psychoJS.experiment._currentTrialData['Q35'];
        expInfo['36'] = psychoJS.experiment._currentTrialData['Q36'];
        expInfo['37'] = psychoJS.experiment._currentTrialData['Q37'];
        expInfo['38'] = psychoJS.experiment._currentTrialData['Q38'];
        expInfo['39'] = psychoJS.experiment._currentTrialData['Q39'];
        expInfo['40'] = psychoJS.experiment._currentTrialData['Q40'];
        expInfo['41'] = psychoJS.experiment._currentTrialData['Q41'];
        expInfo['42'] = psychoJS.experiment._currentTrialData['Q42'];
        expInfo['43'] = psychoJS.experiment._currentTrialData['Q43'];
        expInfo['44'] = psychoJS.experiment._currentTrialData['Q44'];
        expInfo['45'] = psychoJS.experiment._currentTrialData['Q45'];
        expInfo['46'] = psychoJS.experiment._currentTrialData['Q46'];
        expInfo['47'] = psychoJS.experiment._currentTrialData['Q47'];
        expInfo['48'] = psychoJS.experiment._currentTrialData['Q48'];
        expInfo['49'] = psychoJS.experiment._currentTrialData['Q49'];
        expInfo['50'] = psychoJS.experiment._currentTrialData['Q50'];
        expInfo['51'] = psychoJS.experiment._currentTrialData['Q51'];
        expInfo['52'] = psychoJS.experiment._currentTrialData['Q52'];
        expInfo['53'] = psychoJS.experiment._currentTrialData['Q53'];
        expInfo['54'] = psychoJS.experiment._currentTrialData['Q54'];
        expInfo['55'] = psychoJS.experiment._currentTrialData['Q55'];
        expInfo['56'] = psychoJS.experiment._currentTrialData['Q56'];
        expInfo['57'] = psychoJS.experiment._currentTrialData['Q57'];
  Routine Welcome
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    TextComponent Instructions_1
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Thank you for your participation. This study is split into two.

        In the first half you will be asked to fill in a questionnaire.

        In the second half you will be asked to participate in a behavioural task.

        Press the space bar to continue.
    KeyboardComponent key_resp_1
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instr_PVQ
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    TextComponent Instructions_3
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        In the following you will see a list of statements.

        For each statement you must indicate the extent to which you believe that the statement applies to yourself on a 7 point scale (Totally Disagree to Totally Agree).

        It is important that you provide a reponse for each statement or you will not be able to proceed with the remainder of the study.

        If you are ready press the space bar to being.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback
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    TextComponent feedback_message
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine official
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    TextComponent instructions_2
      letterHeight = 0.05
      startVal [time (s)] = 0.5
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      text:
        Great!

        Now that you have done some practice trials, you are ready to start.

        From now on you will not receive feedback after each trial.

        In order to start please press the spacebar.
    KeyboardComponent spaceresp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine trials
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    KeyboardComponent key_resp
      allowedKeys = 'space','none'
      correctAns = $correct_response
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
      store = first key
      storeCorrect = True
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    PolygonComponent stimulus
      fillColor [set every repeat] = $thisColour
      lineColor [set every repeat] = $thisColour
      nVertices = 256
      saveStartStop = False
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.5
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        corr=0
      End Routine:
        if key_resp.keys==correct_response:
            corr=1
            msg="Correct!"
        else:
            corr=0
            msg="Incorrect"

        thisExp.addData('correct', corr)
  Routine rest_1
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    TextComponent instructions_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You may take a break.

        Press the spacebar when you are ready to continue.
    KeyboardComponent spaceresp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rest_2
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    TextComponent instructions_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You are half way through! You may take a break.

        Press the spacebar when you are ready to continue.
    KeyboardComponent spaceresp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rest_3
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    TextComponent instructions_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You may take a break.

        Press the spacebar when you are ready to continue.
    KeyboardComponent spaceresp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent instructions_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Thank you for participating in this experiment!

        This experiment is now over and the screen will close in a few seconds.

        In the meanwhile please wait for the researcher.
Flow
  Routine practice
  Routine wait
  LoopInitiator trials_practice loopType="TrialHandler"
    conditionsFile = gonogostims.xlsx
    loopType = fullRandom
    nReps = 2
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    conditions:
      [{'thisColour': 'red', 'correct_response': None},
      {'thisColour': 'green', 'correct_response': 'space'},
      {'thisColour': 'green', 'correct_response': 'space'},
      {'thisColour': 'green', 'correct_response': 'space'},
      {'thisColour': 'green', 'correct_response': 'space'}]
    Routine trials
    Routine feedback
  LoopTerminator trials_practice
  Routine official
  Routine wait
  LoopInitiator trials_off_1 loopType="TrialHandler"
    conditionsFile = gonogostims.xlsx
    loopType = fullRandom
    nReps = 10
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    conditions:
      [{'thisColour': 'red', 'correct_response': None},
      {'thisColour': 'green', 'correct_response': 'space'},
      {'thisColour': 'green', 'correct_response': 'space'},
      {'thisColour': 'green', 'correct_response': 'space'},
      {'thisColour': 'green', 'correct_response': 'space'}]
    Routine trials
  LoopTerminator trials_off_1
  Routine rest_1
  Routine wait
  LoopInitiator trials_off_2 loopType="TrialHandler"
    conditionsFile = gonogostims.xlsx
    loopType = fullRandom
    nReps = 10
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    conditions:
      [{'thisColour': 'red', 'correct_response': 'none'},
      {'thisColour': 'green', 'correct_response': 'space'},
      {'thisColour': 'green', 'correct_response': 'space'},
      {'thisColour': 'green', 'correct_response': 'space'},
      {'thisColour': 'green', 'correct_response': 'space'}]
    Routine trials
  LoopTerminator trials_off_2
  Routine rest_2
  Routine wait
  LoopInitiator trials_off_3 loopType="TrialHandler"
    conditionsFile = gonogostims.xlsx
    loopType = fullRandom
    nReps = 10
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    conditions:
      [{'thisColour': 'red', 'correct_response': 'none'},
      {'thisColour': 'green', 'correct_response': 'space'},
      {'thisColour': 'green', 'correct_response': 'space'},
      {'thisColour': 'green', 'correct_response': 'space'},
      {'thisColour': 'green', 'correct_response': 'space'}]
    Routine trials
  LoopTerminator trials_off_3
  Routine rest_3
  Routine wait
  LoopInitiator trials_off_4 loopType="TrialHandler"
    conditionsFile = gonogostims.xlsx
    loopType = fullRandom
    nReps = 10
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    conditions:
      [{'thisColour': 'red', 'correct_response': 'none'},
      {'thisColour': 'green', 'correct_response': 'space'},
      {'thisColour': 'green', 'correct_response': 'space'},
      {'thisColour': 'green', 'correct_response': 'space'},
      {'thisColour': 'green', 'correct_response': 'space'}]
    Routine trials
  LoopTerminator trials_off_4
  Routine end
